WorkflowBuilder(Version=2.4.0)
Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Black
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Hidden
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=0
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> GroupWorkflow BonVisionResources(Description="Loads mesh and shader resources for rendering primitive stimuli.")
    WorkflowInput Source1
    -> Bonsai.Shaders.UpdateRenderState
      RenderState
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=Blend)
        StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=SrcAlpha, DestinationFactor=OneMinusSrcAlpha)
        StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Lequal)
    -> NestedWorkflow InternalResources
        WorkflowInput Source1
        -> Bonsai.Shaders.MeshResources
          Meshes
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Quad, FileName=BonVision:Models.Quad.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=ViewportQuad, QuadEffects=None)
            MeshConfiguration(Name=MeshMap)
            MeshConfiguration(Name=SphereMap)
        -> WorkflowOutput
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Plane, FileName=BonVision:Models.Plane.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Checkerboard
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Quad.vert
          FragmentShader=BonVision:Shaders.Checkerboard.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Image
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Quad.vert
          FragmentShader=BonVision:Shaders.Image.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Gratings
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Quad.vert
          FragmentShader=BonVision:Shaders.Gratings.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Color
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Quad.vert
          FragmentShader=BonVision:Shaders.Color.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Circle
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Quad.vert
          FragmentShader=BonVision:Shaders.Circle.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=CircleArray
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.QuadArray.vert
          FragmentShader=BonVision:Shaders.Circle.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Gamma
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=lut, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Quad.vert
          FragmentShader=BonVision:Shaders.Gamma.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMap
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.MeshMap.vert
          FragmentShader=BonVision:Shaders.MeshMap.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=SphereMap
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=TextureCubeMap))
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.SphereMap.vert
          FragmentShader=BonVision:Shaders.SphereMap.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Model
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Model.vert
          FragmentShader=BonVision:Shaders.Model.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=TexturedModel
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.TexturedModel.vert
          FragmentShader=BonVision:Shaders.TexturedModel.frag
    -> WorkflowOutput
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=RotationGratings
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\Quad.vert
      FragmentShader=BonVision:Shaders.Gratings.frag
-> Bonsai.Resources.LoadResources

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random
-> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
-> AsyncSubject RewardDistribution

GroupWorkflow NI-DAQ
    ExternalizedMapping(Channels, SampleRate)
    -> Bonsai.DAQmx.AnalogInput
      SignalSource=""
      SampleRate=10000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=10
      SamplesPerRead=-1
      Channels
        AnalogInputChannelConfiguration(ChannelName=EncoderA, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai0, TerminalConfiguration=Rse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=EncoderB, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai1, TerminalConfiguration=Rse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=Photodiode, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai2, TerminalConfiguration=Rse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=Stimulation, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai3, TerminalConfiguration=Differential, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=Exposure, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai4, TerminalConfiguration=Differential, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=UV, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai5, TerminalConfiguration=Differential, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=Blue, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai6, TerminalConfiguration=Differential, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=StartImaging, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai7, TerminalConfiguration=Differential, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=Valve, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai8, TerminalConfiguration=Rse, VoltageUnits=Volts)
        AnalogInputChannelConfiguration(ChannelName=Lick, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai9, TerminalConfiguration=Rse, VoltageUnits=Volts)
    -> Bonsai.Dsp.MatrixWriter(Path=Data\nidaq.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor) => #2
    -> WorkflowOutput
    #2 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
    -> Bonsai.Dsp.Butterworth(SampleRate=10000, Cutoff1=30, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
    -> PublishSubject Photodiode
    #2 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1))
    -> QuadratureEncoder(VoltageThreshold=1.5, Step=-1)
    -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=S32, Channels=nil)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Val0)
    -> Bonsai.Dsp.Rescale(Min=0, Max=500, RangeMin=0, RangeMax=1, RescaleType=Linear)
    -> PublishSubject Location

    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> BooleanProperty(Value=true) => #15
    Bonsai.Windows.Input.KeyDown(Filter=T, SuppressRepetitions=false)
    -> BooleanProperty(Value=false) => #17
    #15, #17 -> Merge
    -> Bonsai.DAQmx.DigitalOutput(Channels(DigitalOutputChannelConfiguration(ChannelName=DO_0, Grouping=OneChannelForAllLines, Lines=Dev1/port0/line0)))
    -> Visualizer "Camera Acq Trigger"
        WorkflowInput Source1
        -> WorkflowOutput

GroupWorkflow Harp
    Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=112, PayloadType=U8, Payload=4) => #0
    Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=118, PayloadType=U8, Payload=6) => #1
    #0, #1 -> Merge
    -> BehaviorSubject Commands

    SubscribeSubject Commands => #4
    ExternalizedMapping(PortName(Category=Harp)) => #5
    #4, #5 -> Bonsai.Harp.Device(PortName=COM8, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
    -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> PublishSubject Lick
    -> WorkflowOutput

GroupWorkflow InfiniteCorridor
    Bonsai.Shaders.RenderFrame => #0
    SubscribeSubject Location
    -> Bonsai.Numerics.Abs
    -> Mod(Operand=DoubleProperty(Value=1)) => #3
    -> PropertyMapping(Left) => #4
    #3 -> Add(Operand=DoubleProperty(Value=1))
    -> PropertyMapping(Right) => #6
    #0, #4, #6 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=0, Right=1, Bottom=0, Top=1)
    -> PublishSubject DrawStimuli
    -> Bonsai.Shaders.DrawFramebuffer(RenderState="", FramebufferAttachments="")
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedViewport.bonsai) => #10
    #3 -> PropertyMapping(ColorR, ColorG, ColorB) => #11
    #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=0.4, ExtentY=0.4, LocationX=1.5, LocationY=-0.9, ColorR=0, ColorG=0, ColorB=0, ColorA=1)

    SubscribeSubject DrawStimuli => #13
    SubscribeSubject Location
    -> Add(Operand=DoubleProperty(Value=10)) => #15
    SubscribeSubject Random
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-180, Upper=180) => #17
    ExternalizedMapping(Count(DisplayName=NumSegments)) => #18
    #17, #18 -> Bonsai.Numerics.Distributions.SampleMany(Count=1000)
    -> Bonsai.Numerics.DegreeToRadian
    -> ToArray => #21
    #21, #15 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform => #23
      Expression:
        new(
        Item1[int32(Item2) % Item1.Length - 1] as Angle1,
        Item1[int32(Item2) % Item1.Length] as Angle2,
        Item1[int32(Item2) % Item1.Length + 1] as Angle3)
    -> MemberSelector(Selector=Angle1)
    -> PropertyMapping(Angle) => #25
    #13, #25 -> GroupWorkflow DrawGratings(Description="Draws parameterized 2D sinewave gratings.")
        WorkflowInput Source1 => #0
        ExternalizedMapping(LocationX, LocationY) => #1
        ExternalizedMapping(Value(DisplayName=Angle, Description="The angle of the grating stimulus."))
        -> BonVision.AngleProperty(Value=-13.350275)
        -> PropertyMapping(Angle) => #4
        ExternalizedMapping(SpatialFrequency, TemporalFrequency, Phase) => #5
        ExternalizedMapping(SquareWave, Contrast) => #6
        ExternalizedMapping(Radius, Aperture, Opacity) => #7
        ExternalizedMapping(ExtentX, ExtentY) => #8
        #0, #1, #8, #4 -> GroupWorkflow Transform => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(X(DisplayName=LocationX), Y(DisplayName=LocationY)) => #1
            #0, #1 -> Bonsai.Shaders.Translate(Order=Prepend, X=0.5, Y=1, Z=0) => #2
            ExternalizedMapping(X(DisplayName=ExtentX), Y(DisplayName=ExtentY)) => #3
            #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #4
            ExternalizedMapping(Angle) => #5
            #4, #5 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=-0.233006254)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=RotationGratings)
            -> WorkflowOutput
        #9, #5, #8, #4 -> GroupWorkflow PhaseFrequency => #10
            WorkflowInput Source1 => #0
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: single(it)
            ExternalizedMapping(Value(DisplayName=TemporalFrequency, Description="The sliding speed of the grating stimulus, in cycles per second.")) => #4
            #3, #4 -> Multiply(Operand=FloatProperty(Value=0))
            -> Accumulate => #6
            ExternalizedMapping(ExtentX, ExtentY, Angle, SpatialFrequency(Description="The spatial frequency of the gratings, in cycles per degree.")) => #7
            #0, #7 -> GroupWorkflow
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=ExtentX)) => #1
                #0, #1 -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=X, Value=2) => #2
                ExternalizedMapping(Value(DisplayName=ExtentY)) => #3
                #0, #3 -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=Y, Value=2) => #4
                ExternalizedMapping(Value(DisplayName=Angle)) => #5
                #0, #5 -> FloatProperty(Value=-0.233006254) => #6
                ExternalizedMapping(Value(DisplayName=SpatialFrequency)) => #7
                #0, #7 -> FloatProperty(Value=0.5) => #8
                #2, #4, #8, #6 -> Zip
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    single(
                    Math.Sqrt((Item1 * Math.Cos(Item4) * Item1 * Math.Cos(Item4)) +
                    (Item2 * Math.Sin(Item4) * Item2 * Math.Sin(Item4))) * Item3
                    )
                -> WorkflowOutput
            -> Bonsai.Shaders.UpdateUniform(UniformName=frequency, ShaderName=RotationGratings) => #9
            ExternalizedMapping(Value(DisplayName=Phase, Description="The optional phase offset of the grating stimulus, in degrees."))
            -> BonVision.AngleProperty(Value=0)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it / (2 * Math.PI)
            -> PropertyMapping(Value) => #13
            #6, #13 -> Subtract(Operand=FloatProperty(Value=0)) => #14
            #9, #14 -> WithLatestFrom
            -> MemberSelector(Selector="Item2,Item1")
            -> Divide
            -> MemberSelector
            -> Bonsai.Shaders.UpdateUniform(UniformName=phase, ShaderName=RotationGratings)
            -> WorkflowOutput
        #10, #6 -> GroupWorkflow Contrast => #11
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SquareWave, Description="A value specifying whether to use a sine or square wave function as a basis for the stimulus.")) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it ? 1 : 0
            -> Bonsai.Shaders.UpdateUniform(UniformName=square, ShaderName=RotationGratings) => #4
            ExternalizedMapping(Value(DisplayName=Contrast, Description="The contrast of the grating stimulus, where zero is no contrast, and one is maximum contrast.")) => #5
            #4, #5 -> FloatProperty(Value=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=contrast, ShaderName=RotationGratings)
            -> WorkflowOutput
        #11, #7 -> GroupWorkflow Border
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Radius, Description="The normalized radius of the clipping mask applied to the stimulus.")) => #1
            #0, #1 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=radius, ShaderName=RotationGratings) => #3
            ExternalizedMapping => #4
              Value
                DisplayName=Aperture
                Description="The optional variance of the gaussian mask applied to the stimulus. A value of zero specifies that no mask should be applied."
            #3, #4 -> FloatProperty(Value=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=aperture, ShaderName=RotationGratings) => #6
            ExternalizedMapping(Value(DisplayName=Opacity, Description="The normalized opacity of the stimulus. Zero is fully transparent, and one is fully opaque.")) => #7
            #6, #7 -> FloatProperty(Value=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=opacity, ShaderName=RotationGratings)
            -> WorkflowOutput
        -> Bonsai.Shaders.DrawMesh(ShaderName=RotationGratings, MeshName=Quad)
        -> WorkflowOutput
    #23 -> MemberSelector(Selector=Angle2)
    -> PropertyMapping(Angle) => #28
    #13, #28 -> GroupWorkflow DrawGratings(Description="Draws parameterized 2D sinewave gratings.")
        WorkflowInput Source1 => #0
        ExternalizedMapping(LocationX, LocationY) => #1
        ExternalizedMapping(Value(DisplayName=Angle, Description="The angle of the grating stimulus."))
        -> BonVision.AngleProperty(Value=145.726273)
        -> PropertyMapping(Angle) => #4
        ExternalizedMapping(SpatialFrequency, TemporalFrequency, Phase) => #5
        ExternalizedMapping(SquareWave, Contrast) => #6
        ExternalizedMapping(Radius, Aperture, Opacity) => #7
        ExternalizedMapping(ExtentX, ExtentY) => #8
        #0, #1, #8, #4 -> GroupWorkflow Transform => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(X(DisplayName=LocationX), Y(DisplayName=LocationY)) => #1
            #0, #1 -> Bonsai.Shaders.Translate(Order=Prepend, X=1.5, Y=1, Z=0) => #2
            ExternalizedMapping(X(DisplayName=ExtentX), Y(DisplayName=ExtentY)) => #3
            #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #4
            ExternalizedMapping(Angle) => #5
            #4, #5 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=2.54340339)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=RotationGratings)
            -> WorkflowOutput
        #9, #5, #8, #4 -> GroupWorkflow PhaseFrequency => #10
            WorkflowInput Source1 => #0
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: single(it)
            ExternalizedMapping(Value(DisplayName=TemporalFrequency, Description="The sliding speed of the grating stimulus, in cycles per second.")) => #4
            #3, #4 -> Multiply(Operand=FloatProperty(Value=0))
            -> Accumulate => #6
            ExternalizedMapping(ExtentX, ExtentY, Angle, SpatialFrequency(Description="The spatial frequency of the gratings, in cycles per degree.")) => #7
            #0, #7 -> GroupWorkflow
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=ExtentX)) => #1
                #0, #1 -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=X, Value=2) => #2
                ExternalizedMapping(Value(DisplayName=ExtentY)) => #3
                #0, #3 -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=Y, Value=2) => #4
                ExternalizedMapping(Value(DisplayName=Angle)) => #5
                #0, #5 -> FloatProperty(Value=2.54340339) => #6
                ExternalizedMapping(Value(DisplayName=SpatialFrequency)) => #7
                #0, #7 -> FloatProperty(Value=0.5) => #8
                #2, #4, #8, #6 -> Zip
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    single(
                    Math.Sqrt((Item1 * Math.Cos(Item4) * Item1 * Math.Cos(Item4)) +
                    (Item2 * Math.Sin(Item4) * Item2 * Math.Sin(Item4))) * Item3
                    )
                -> WorkflowOutput
            -> Bonsai.Shaders.UpdateUniform(UniformName=frequency, ShaderName=RotationGratings) => #9
            ExternalizedMapping(Value(DisplayName=Phase, Description="The optional phase offset of the grating stimulus, in degrees."))
            -> BonVision.AngleProperty(Value=0)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it / (2 * Math.PI)
            -> PropertyMapping(Value) => #13
            #6, #13 -> Subtract(Operand=FloatProperty(Value=0)) => #14
            #9, #14 -> WithLatestFrom
            -> MemberSelector(Selector="Item2,Item1")
            -> Divide
            -> MemberSelector
            -> Bonsai.Shaders.UpdateUniform(UniformName=phase, ShaderName=RotationGratings)
            -> WorkflowOutput
        #10, #6 -> GroupWorkflow Contrast => #11
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SquareWave, Description="A value specifying whether to use a sine or square wave function as a basis for the stimulus.")) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it ? 1 : 0
            -> Bonsai.Shaders.UpdateUniform(UniformName=square, ShaderName=RotationGratings) => #4
            ExternalizedMapping(Value(DisplayName=Contrast, Description="The contrast of the grating stimulus, where zero is no contrast, and one is maximum contrast.")) => #5
            #4, #5 -> FloatProperty(Value=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=contrast, ShaderName=RotationGratings)
            -> WorkflowOutput
        #11, #7 -> GroupWorkflow Border
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Radius, Description="The normalized radius of the clipping mask applied to the stimulus.")) => #1
            #0, #1 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=radius, ShaderName=RotationGratings) => #3
            ExternalizedMapping => #4
              Value
                DisplayName=Aperture
                Description="The optional variance of the gaussian mask applied to the stimulus. A value of zero specifies that no mask should be applied."
            #3, #4 -> FloatProperty(Value=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=aperture, ShaderName=RotationGratings) => #6
            ExternalizedMapping(Value(DisplayName=Opacity, Description="The normalized opacity of the stimulus. Zero is fully transparent, and one is fully opaque.")) => #7
            #6, #7 -> FloatProperty(Value=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=opacity, ShaderName=RotationGratings)
            -> WorkflowOutput
        -> Bonsai.Shaders.DrawMesh(ShaderName=RotationGratings, MeshName=Quad)
        -> WorkflowOutput
    #23 -> MemberSelector(Selector=Angle3)
    -> PropertyMapping(Angle) => #31
    #13, #31 -> GroupWorkflow DrawGratings(Description="Draws parameterized 2D sinewave gratings.")
        WorkflowInput Source1 => #0
        ExternalizedMapping(LocationX, LocationY) => #1
        ExternalizedMapping(Value(DisplayName=Angle, Description="The angle of the grating stimulus."))
        -> BonVision.AngleProperty(Value=80.8969)
        -> PropertyMapping(Angle) => #4
        ExternalizedMapping(SpatialFrequency, TemporalFrequency, Phase) => #5
        ExternalizedMapping(SquareWave, Contrast) => #6
        ExternalizedMapping(Radius, Aperture, Opacity) => #7
        ExternalizedMapping(ExtentX, ExtentY) => #8
        #0, #1, #8, #4 -> GroupWorkflow Transform => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(X(DisplayName=LocationX), Y(DisplayName=LocationY)) => #1
            #0, #1 -> Bonsai.Shaders.Translate(Order=Prepend, X=2.5, Y=1, Z=0) => #2
            ExternalizedMapping(X(DisplayName=ExtentX), Y(DisplayName=ExtentY)) => #3
            #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #4
            ExternalizedMapping(Angle) => #5
            #4, #5 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=1.41191721)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=RotationGratings)
            -> WorkflowOutput
        #9, #5, #8, #4 -> GroupWorkflow PhaseFrequency => #10
            WorkflowInput Source1 => #0
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: single(it)
            ExternalizedMapping(Value(DisplayName=TemporalFrequency, Description="The sliding speed of the grating stimulus, in cycles per second.")) => #4
            #3, #4 -> Multiply(Operand=FloatProperty(Value=0))
            -> Accumulate => #6
            ExternalizedMapping(ExtentX, ExtentY, Angle, SpatialFrequency(Description="The spatial frequency of the gratings, in cycles per degree.")) => #7
            #0, #7 -> GroupWorkflow
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=ExtentX)) => #1
                #0, #1 -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=X, Value=2) => #2
                ExternalizedMapping(Value(DisplayName=ExtentY)) => #3
                #0, #3 -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=Y, Value=2) => #4
                ExternalizedMapping(Value(DisplayName=Angle)) => #5
                #0, #5 -> FloatProperty(Value=1.41191721) => #6
                ExternalizedMapping(Value(DisplayName=SpatialFrequency)) => #7
                #0, #7 -> FloatProperty(Value=0.5) => #8
                #2, #4, #8, #6 -> Zip
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    single(
                    Math.Sqrt((Item1 * Math.Cos(Item4) * Item1 * Math.Cos(Item4)) +
                    (Item2 * Math.Sin(Item4) * Item2 * Math.Sin(Item4))) * Item3
                    )
                -> WorkflowOutput
            -> Bonsai.Shaders.UpdateUniform(UniformName=frequency, ShaderName=RotationGratings) => #9
            ExternalizedMapping(Value(DisplayName=Phase, Description="The optional phase offset of the grating stimulus, in degrees."))
            -> BonVision.AngleProperty(Value=0)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it / (2 * Math.PI)
            -> PropertyMapping(Value) => #13
            #6, #13 -> Subtract(Operand=FloatProperty(Value=0)) => #14
            #9, #14 -> WithLatestFrom
            -> MemberSelector(Selector="Item2,Item1")
            -> Divide
            -> MemberSelector
            -> Bonsai.Shaders.UpdateUniform(UniformName=phase, ShaderName=RotationGratings)
            -> WorkflowOutput
        #10, #6 -> GroupWorkflow Contrast => #11
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SquareWave, Description="A value specifying whether to use a sine or square wave function as a basis for the stimulus.")) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it ? 1 : 0
            -> Bonsai.Shaders.UpdateUniform(UniformName=square, ShaderName=RotationGratings) => #4
            ExternalizedMapping(Value(DisplayName=Contrast, Description="The contrast of the grating stimulus, where zero is no contrast, and one is maximum contrast.")) => #5
            #4, #5 -> FloatProperty(Value=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=contrast, ShaderName=RotationGratings)
            -> WorkflowOutput
        #11, #7 -> GroupWorkflow Border
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Radius, Description="The normalized radius of the clipping mask applied to the stimulus.")) => #1
            #0, #1 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=radius, ShaderName=RotationGratings) => #3
            ExternalizedMapping => #4
              Value
                DisplayName=Aperture
                Description="The optional variance of the gaussian mask applied to the stimulus. A value of zero specifies that no mask should be applied."
            #3, #4 -> FloatProperty(Value=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=aperture, ShaderName=RotationGratings) => #6
            ExternalizedMapping(Value(DisplayName=Opacity, Description="The normalized opacity of the stimulus. Zero is fully transparent, and one is fully opaque.")) => #7
            #6, #7 -> FloatProperty(Value=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=opacity, ShaderName=RotationGratings)
            -> WorkflowOutput
        -> Bonsai.Shaders.DrawMesh(ShaderName=RotationGratings, MeshName=Quad)
        -> WorkflowOutput

GroupWorkflow Schedule
    SubscribeSubject Location => #0
    SubscribeSubject Random => #1
    ExternalizedMapping(Mean(DisplayName=MeanDistance, Category=Reward), StdDev(DisplayName=StdDevDistance, Category=Reward)) => #2
    #1, #2 -> Bonsai.Numerics.Distributions.CreateNormal(Mean=3, StdDev=1) => #3
    ExternalizedMapping(Count(Category=Reward)) => #4
    #3, #4 -> Bonsai.Numerics.Distributions.SampleMany(Count=20)
    -> Accumulate
    -> ToArray => #7
    #7, #0 -> CombineLatest
    -> CheckpointReached
    -> CreateObservable Checkpoint
        WorkflowInput Source1

        SubscribeSubject Lick
        -> Condition Onset
            WorkflowInput Source1
            -> WorkflowOutput
        -> First => #3
        SubscribeSubject RewardDistribution
        -> Bonsai.Numerics.Distributions.Sample => #5
        #3, #5 -> Zip
        -> Condition GiveReward
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
        -> MulticastSubject Commands
        -> WorkflowOutput
    -> Switch
    -> WorkflowOutput

GroupWorkflow Stimulation
    ExternalizedMapping("RandomRate (Hz)"(Description="The average rate for triggering stimulation pulses."))
    -> Defer Timer => #1
        SubscribeSubject Random => #0
        ExternalizedMapping(Rate(DisplayName="RandomRate (Hz)")) => #1
        #0, #1 -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT6.691S, Period=PT0S)
        -> WorkflowOutput
    ExternalizedMapping("Duration (ms)", "Frequency (Hz)", "PulseWidth (ms)") => #2
    #1, #2 -> SelectMany Stimulation
        ExternalizedMapping(Value(DisplayName="Duration (ms)", Description="The total duration of the stimulation pulse train."))
        -> PropertySource<Bonsai.Dsp.FunctionGenerator,System.Int32>(MemberName=BufferLength, Value=1000)
        -> First
        -> Multiply(Operand=IntProperty(Value=10))
        -> AsyncSubject BufferLength

        ExternalizedMapping(Value(DisplayName="Frequency (Hz)", Description="The frequency of the stimulation pulse sequence."))
        -> PropertySource<Bonsai.Dsp.FunctionGenerator,System.Double>(MemberName=Frequency, Value=10)
        -> First
        -> AsyncSubject Frequency
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression: 1000.0 / it
        ExternalizedMapping(Value(DisplayName="PulseWidth (ms)", Description="The duration of each stimulation pulse. Cannot be higher than stimulation period."))
        -> PropertySource<Take,System.Int32>(MemberName=Count, Value=50)
        -> First => #12
        #12, #9 -> Zip
        -> Divide
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: 1 - it
        -> AsyncSubject PulseWidth

        SubscribeSubject BufferLength
        -> PropertyMapping(BufferLength) => #18
        SubscribeSubject BufferLength
        -> PropertyMapping(BufferSize) => #20
        SubscribeSubject Frequency
        -> PropertyMapping(Frequency) => #22
        #22, #18 -> Bonsai.Dsp.FunctionGenerator(BufferLength=10000, Frequency=10, Waveform=Sawtooth, SampleRate=10000, Depth=F32, Amplitude=0.5, Offset=0.5, Phase=3.1) => #23
        SubscribeSubject PulseWidth
        -> PropertyMapping(ThresholdValue) => #25
        #23, #25 -> Bonsai.Dsp.Threshold(ThresholdValue=0.5, MaxValue=4, ThresholdType=BinaryInv)
        -> Take(Count=1) => #27
        #27, #20 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=10000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=10000
          Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> WorkflowOutput
    -> Last
    -> Repeat

Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default)
-> Bonsai.IO.CsvWriter
  FileName=Data\eye.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false
  Selector="Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp"
-> MemberSelector(Selector=Image)
-> Bonsai.Vision.VideoWriter
  FileName=Data\eye.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=50
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
